"""
hh_muscle - a muscle model in HH formalism 
#############################################################################

Description
+++++++++++
hh_mucle is reimplementation of the HH muscle model implemented in NEURON
https://github.com/research-team/memristive-spinal-cord/blob/master/NEURON/second_layer/neuron%2Bpython/mod_files/hill_eq.mod
https://github.com/research-team/memristive-spinal-cord/blob/master/NEURON/second_layer/neuron%2Bpython/mod_files/muscle.mod

References
++++++++++

.. [1] Muscle length-dependent contribution of motoneuron Cav1.3 channels to force production in model slow motor unit
   https://journals.physiology.org/doi/full/10.1152/japplphysiol.00491.2016

.. [2] Repository: https://github.com/research-team/memristive-spinal-cord

++++++++

hh_psc_alpha
"""
neuron hh_muscle:
    state:
        r integer = 0    # number of steps in the current refractory phase
        V_m mV = V_m_init    # Membrane potential
        Ca_in mmol = Ca_in_init    # Inside Calcium concentration
        Act_m real =    alpha_m(V_m_init) / ( alpha_m(V_m_init) + beta_m(V_m_init) )
        Act_h real = h_inf(V_m_init)
        Inact_n real = n_inf(V_m_init)
        Act_p real = p_inf(V_m_init)
        Act_mc real = mc_inf(V_m_init)
        Act_hc real = hc_inf(V_m_init)
      
      ## import from mod file
        CaSR mol = CaSR_init
        CaSRCS mol = CaSRCS_init
        Ca mol = Ca_init
        CaB mol = CaB_init
        CaT mol = CaT_init
        AM real = AM_init
        mgi real = mgi_init


    equations:
        # synapses: alpha functions
        kernel I_syn_in = (e/tau_syn_in) * t * exp(-t/tau_syn_in)
        kernel I_syn_ex = (e/tau_syn_ex) * t * exp(-t/tau_syn_ex)
        inline I_syn_exc pA = convolve(I_syn_ex, exc_spikes)
        inline I_syn_inh pA = convolve(I_syn_in, inh_spikes)

        inline E_Ca mV = ((1000.0 * R_const * T_current) / (2. * F_const)) * log10(Ca_out / Ca_in)

        inline I_Na pA = g_Na * Act_m * Act_m * Act_m * Act_h * (V_m - E_Na)
        inline I_K pA = g_K_rect * Inact_n * Inact_n * Inact_n * Inact_n * (V_m - E_K)
        inline I_L pA = g_L * (V_m - E_L)
        inline I_Ca_N pA = g_Ca_N *    Act_mc * Act_mc * Act_hc * (V_m - E_Ca)
        inline I_Ca_L pA = g_Ca_L * Act_p * (V_m - E_Ca)
        inline I_K_Ca pA = g_K_Ca_5ht * g_K_Ca * ((Ca_in * Ca_in) / (Ca_in * Ca_in + 0.014 * 0.014)) * (V_m - E_K)

        V_m' =(-(I_Na + I_K + I_L + I_Ca_N + I_Ca_L + I_K_Ca) + I_stim + I_e + I_syn_inh + I_syn_exc) / C_m

        Inact_n' = (n_inf(V_m) - Inact_n) / n_tau(V_m)
        Act_m' = alpha_m(V_m) * (1. - Act_m) - beta_m(V_m) * Act_m
        Act_h' = (h_inf(V_m) - Act_h) / h_tau(V_m)
        Act_p' = (p_inf(V_m) - Act_p) / p_tau
        Act_mc' = (mc_inf(V_m) - Act_mc) / mc_tau
        Act_hc' = (hc_inf(V_m) - Act_hc) / hc_tau

        Ca_in'= (0.01 / s) * (-alpha * (I_Ca_N + I_Ca_L) - 4. * Ca_in)
        
        ## the import from mod file
        ## https://nrn.readthedocs.io/en/latest/hoc/modelspec/programmatic/mechanisms/nmodl.html
        _smth = rate(cli, CaT, AM, t)
        CaSR' = -k1*CS0*CaSR + (k1*CaSR+k2)*CaSRCS - R + U(Ca)
        CaSRCS' = k1*CS0*CaSR - (k1*CaSR+k2)*CaSRCS
        Ca' = - k5*T0*Ca + (k5*Ca+k6)*CaT - k3*B0*Ca + (k3*Ca+k4)*CaB + R - U(Ca)
        CaB' = k3*B0*Ca - (k3*Ca+k4)*CaB
        CaT' = k5*T0*Ca - (k5*Ca+k6)*CaT
        AM' = (AMinf - AM)/AMtau
        mgi' = AM^alpha0

    parameters:

        t_ref ms = 2.0 ms                # Refractory period
        g_Na nS = 5000.0 nS              # Sodium peak conductance
        g_L nS = 200.0 nS                # Leak conductance
        g_K_rect nS = 30000.0 nS         # Delayed Rectifier Potassium peak conductance
        g_Ca_N nS = 5000.0 nS
        g_Ca_L nS = 10.0 nS
        g_K_Ca nS = 30000.0 nS
        g_K_Ca_5ht real = 0.6            # modulation of K-Ca channels by 5HT. Its value 1.0 == no modulation.

        Ca_in_init mmol = 0.0001 mmol    # Initial inside Calcium concentration
        Ca_out mmol = 2.0 mmol           # Outside Calcium concentration. Remains constant during simulation.

        C_m pF = 200.0 pF                # Membrane capacitance
        E_Na mV = 50.0 mV
        E_K mV = -80.0 mV
        E_L mV = -70.0 mV

        # Nernst equation constants
        R_const real = 8.314472
        F_const real = 96485.34
        T_current real = 309.15          # 36 Celcius

        tau_syn_ex ms = 0.2 ms           # Rise time of the excitatory synaptic alpha function
        tau_syn_in ms = 2.0 ms           # Rise time of the inhibitory synaptic alpha function
        I_e pA = 0 pA                    # Constant current
        
        V_m_init mV = -65. mV
        hc_tau ms = 50.0 ms
        mc_tau ms = 15.0 ms
        p_tau ms = 400.0 ms
        alpha mmol/pA = 1E-5 mmol/pA

        ## import from mod file
        ## ::module 1::
        ## k1 mol-1*ms-1 = 3000 mol-1*ms-1
        k1 1/(mol*ms) = 3000
        k2 1/ms = 3
        ## k3 = 400 mol-1*ms-1
        k3 1/(mol*ms) = 400
        k4 1/ms = 1
        ## k5i = 4e5 mol-1*ms-1
        k5i 1/(mol*ms) = 4e5
        k6i 1/ms = 150 
        k 1/mol = 850 
        SF_AM real = 5
        Rmax 1/ms = 10
        ## Umax = 2000 mol-1*ms-1
        Umax 1/(mol*ms) = 2000
        t1 ms = 3
        t2 ms = 25
        phi1 real = 0.03
        phi2 real = 1.23
        phi3 real = 0.01
        phi4 real = 1.08
        CS0 real = 0.03     	#:[M]
        B0 real = 0.00043	#:[M]
        T0 real = 0.00007 	#:[M]
        
        ## ::module 2::
        c1 real = 0.128
        c2 real = 0.093
        c3 real = 61.206
        c4 real = -13.116
        c5 real = 5.095
        alpha0 real = 2
        alpha1 real = 4.77
        alpha2 real = 400
        alpha3 real = 160
        beta real = 0.47
        gamma real = 0.001
        
        ##::simulation::
        vth real = -40
        spk_index real = 0
        t_axon real = 0.01
    
        ## init values
        ## import from mod file
        CaSR_init mol = 0.0025        #:[M]
        CaSRCS_init mol = 0            #:[M]
        Ca_init mol = 1e-10            #:[M]
        CaB_init mol = 0                #:[M]
        CaT_init mol = 0                #:[M]
        AM_init real = 0                #:[M]
        mgi_init real = 0

    internals:
        RefractoryCounts integer = steps(t_ref) # refractory time in steps

    input:
        inh_spikes pA <- inhibitory spike
        exc_spikes pA <- excitatory spike
        inh_spikes_times real <- inhibitory spike
        exc_spikes_times real <- excitatory spike
        I_stim pA <- continuous

    output:
        spike

    update:

        U_old mV = V_m
        integrate_odes()
        CAR(CaSR, t)

        # sending spikes: crossing 0 mV, pseudo-refractoriness and local maximum...
        if r > 0: # is refractory?
            r -= 1
        elif V_m > 0 mV and U_old > V_m: # threshold && maximum
            r = RefractoryCounts
            emit_spike()
    
    function h_inf(V_m mV) real:
        return 1. / (1. + exp((V_m + 65.) / 7.))
    
    function h_tau(V_m mV) ms:
        return (30. * ms) / (exp((V_m + 60.) / 15.) + exp(-(V_m + 60.) / 16.))
    
    function p_inf(V_m mV) real:
        return 1. / (1. + exp(-(V_m + 55.8) / 3.7))
    
    function mc_inf(V_m mV) real:
        return 1. / (1. + exp(-(V_m + 32.) / 5.))
    
    function hc_inf(V_m mV) real:
        return 1. / (1. + exp((V_m + 50.) / 5.))
    
    function n_inf(V_m mV) real:
        return 1. / (1. + exp(-(V_m + 38.) / 15.))
    
    function n_tau(V_m mV) ms:
        return (5. * ms) / (exp((V_m + 50.) / 40.) + exp(-(V_m + 50.) / 50.))
    
    function alpha_m(V_m mV) 1/ms:
        return (0.4 * (V_m + 66.)) / mV / (1. - exp(-(V_m + 66.) / (5. mV))) / ms

    function beta_m(V_m mV) 1/ms:
        return (0.4 * (-(V_m + 32.))) / mV / (1. - exp((V_m + 32.) / (5. mV))) / ms

    ## Import from mod file
    function U (x mmol) 1/(mol*ms):
        if (x >= 0):
            U = Umax*(x^2*k^2/(1+x*k+x^2*k^2))^2
            return U
        else:
            return 0

    ## TODO refactor
    function rate (cli mmol, CaT mmol, AM mmol, t ms) void:
        k5 = phi(cli)*k5i
        k6 = k6i/(1 + SF_AM*AM)
        AMinf = 0.5*(1+tanh(((CaT/T0)-c1)/c2))
        AMtau = c3/(cosh(((CaT/T0)-c4)/(2*c5)))

    ## R in the article
    function CaR (CaSR mmol, t ms) 1/ms:
        # LOCAL i, tempR
        # ::Ca_Release::
        # Recalculate tempR in case we have the spike
        ## TODO refactor spk[spk_index-1]
        if (R_On == 1):
            if (spk_index > 0):
                tempR = tempR + CaSR*Rmax*(1-exp(-(t-spk[spk_index-1])/t1))*exp(-(t-spk[spk_index-1])/t2)
            R = tempR
            tempR = 0
        else:
            R = 0
        return R



